<PlusConfiguration version="2.5">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="PlusServer: OptiTrack (Project file only)"
      Description="Tools: (1) Probe, (2) Needle, (3) Patient (upper right markers)."
    />
    <Device
      Id="TrackerDevice"
      Type="OptiTrack"
      ToolReferenceFrame="Tracker" 
      ProjectFile="Tracker_OptitrackDuo_ProjectFile.ttp"
      AttachToRunningMotive="FALSE"
      MotiveDataDescriptionsUpdateTimeSec="1.0" >
      <DataSources>
        <DataSource Type="Tool" Id="Needle" />
        <DataSource Type="Tool" Id="Probe" />
        <DataSource Type="Tool" Id="Patient" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
        <DataSource Type="Tool" Id="Needle" />
        <DataSource Type="Tool" Id="Probe" />
        <DataSource Type="Tool" Id="Patient" />
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18945"
    SendValidTransformsOnly="TRUE"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="ProbeToPatient" />
        <Transform Name="NeedleToTracker" />
        <Transform Name="ProbeToTracker" />
        <Transform Name="TrackerToPatient" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>